// ********** Image Types
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

// ********** Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

// ********** Pyramid
(NumberOfResolutions 4)

// ********** Transform
(FinalGridSpacingInPhysicalUnits 10.0)
(GridSpacingSchedule 8.0 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")

// ********** Optimizer
(MaximumNumberOfIterations 2000)
(SP_a 1000.0)
(SP_alpha 0.602)
(SP_A 50.0)

// ********** Metric
(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)

// ********** Several
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeFixedMask "false")
(ErodeMovingMask "false")
(UseDifferentiableOverlap "false")

// ********** ImageSampler
(ImageSampler "RandomSparseMask")
(NumberOfSpatialSamples 4096)
(NewSamplesEveryIteration "true")

// ********** Interpolator and Resampler
(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0) 